PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = magnocellular_stimuli
  eyetracker = MouseGaze
  keyboardBackend = ioHub
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine break_5s_
    RoutineSettingsComponent break_5s_
      disabled = True
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $str(5-int(t))
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Parvocelular_test
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    DotsComponent noise_2
      coherence = 1.0
      dir = 0.0
      dotLife = 10
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.8,1]
      nDots = 80000
      noiseDots = direction
      opacity [set every frame] = 1 - t / 10 if 0 <= t <= 10 else 0
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
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    DotsComponent noise_4
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 10
      dotSize = 2
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.8,1]
      nDots = 80000
      noiseDots = direction
      opacity [set every frame] = 1 - t / 10 if 0 <= t <= 10 else 0
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        frecuencia_monitor = 60
        frecuencia_parpadeo = 30  # Hz, cambia este valor por la frecuencia deseada
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Begin Experiment:
        from psychopy.iohub import launchHubServer
        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]
      Begin Routine:
        import math
        import random

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = 0,0
        stim_2.sf = frecuencia_espacial
        stim_2.orientation = orientacion
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada_2.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')
        logs_parametros_trial_2.setText(
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Posicion Angular: {posicion_angular:.2f}\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Frecuencia Espacial: {frecuencia_espacial:.2f}\n"
            f"Frecuencia Temporal: {frecuencia_temporal:.3f}\n"
            f"Contraste: {contraste:.2f}\n"
            f"Color: {color_r},{color_g},{color_b}\n"
            f"Tamaño: {tamanyo:.2f}"
            f"FFT: {FFT:.2f}"
        )

        ####################################################
        #################____SETTINGS____###################
        ####################################################

        stim_2.setPhase(frecuencia_temporal,'+')
        #stim_2.setPhase(0.01,'+')
        stim_2.draw()

        ## FFT if activated

        if FFT != 0:
            frames_por_ciclo = int((frecuencia_monitor / FFT) / 2)
            opacidad = 1 if (frameN % (2 * frames_por_ciclo)) < frames_por_ciclo else 0
        else:
            opacidad = 1

        stim_2.opacity = opacidad

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs_2.setText("El ratón está dentro de la circunferencia")
            # Aquí puedes hacer que el estímulo grating sea visible si es necesario
              # o cualquier acción que quieras realizar
        else:
            logs_2.setText("El ratón está fuera de la circunferencia")
            # El ratón está fuera de la circunferencia
            # Aquí puedes hacer que el estímulo grating sea invisible si es necesario
            # o cualquier acción que quieras realizar

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        # START/STOP: Verifica si se ha presionado la tecla
        keys = event.getKeys()
        if 'space' in keys:
            pass
            #stim_x, stim_y = calcular_posicion_stim(periphereal_region_diameter)
    PolygonComponent foveal_region_2
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = foveal_region_pos
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent logs_2
      letterHeight = 0.025
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_2
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_2
      letterHeight = 0.025
      pos = (0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    SliderComponent slider_2
      disabled = True
      forceEndRoutine = False
      granularity = 0
      initVal = 0.1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    PolygonComponent polygon_2
      disabled = True
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    GratingComponent stim_2
      color [set every repeat] = color_r,color_g/100,color_b
      colorSpace = hsv
      contrast [set every repeat] = contraste
      mask = gauss
      opacity = 0.7
      ori [set every repeat] = orientacion
      phase = 0.5
      pos [set every frame] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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  Routine calibration_routine
    RoutineSettingsComponent calibration_routine
      disabled = True
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        periphereal_region_diameter = 0
      Each Frame:
        #periphereal_region_diameter = 0.5

        if slider_3.getRating() is not None:
            periphereal_region_diameter = slider_3.getRating()

        log_calibration.setText(f"Foveal region diameter: {periphereal_region_diameter:.2f}")
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.015
      pos = (0.45, 0.450)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Click here when calibrated
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    PolygonComponent periphereal_region_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size [set every frame] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    TextComponent log_calibration
      letterHeight = 0.025
      pos = (0.35, 0.35)
      startVal [time (s)] = 0.0
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  Routine instructions
    RoutineSettingsComponent instructions
      disabled = True
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    ImageComponent logo_bio
      image = images/BIOBIZKAIA_horizontal_CMYK.png
      pos = (-0.45, 0.35)
      saveStartStop = False
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent logo_compneurolab
      image = images/compneuro_horizontal.png
      pos = (0.45, 0.35)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_title
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = TEST DE EVALUACIÓN DE LOS SISTEMAS MAGNOCELULAR Y PARVOCELULAR
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    TextComponent text_instructions
      letterHeight = 0.035
      pos = (0, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    CodeComponent code_5
      Code Type = Auto->JS
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      Before Experiment:
        instruction_no = 0
        messages_instructions = ["Bienvenido/a al estudio sobre el rendimiento del sistema visual. En este experimento, observarás varios estímulos visuales presentados en diferentes zonas de la pantalla, que corresponden a la zona periférica o central de la retina.",
        "Se te mostrarán parches de Gabor, que varían en posición, color, fase, frecuencia espacial y temporal. Tu tarea es mantener la mirada fijada en el centro de la pantalla mientras observas los cambios en los estímulos periféricos sin mover los ojos.",
        "Cada cinco ensayos, tendrás un descanso de 5 segundos. Es importante mantener la atención durante los ensayos y descansar durante los intervalos para optimizar tu rendimiento.",
        "Comenzaremos con un ensayo de práctica antes de proceder con los ensayos que serán registrados.",
        "Presiona la barra espaciadora cuando estés listo/a para comenzar. Si tienes alguna pregunta o necesitas más información, no dudes en preguntar."]
      Begin Experiment:
        #text_instructions.alignHoriz='left'
        #text_instructions.wrapWidth=1.0
        instruction_no = 0
      Each Frame:
        text_instructions.text = messages_instructions[instruction_no]

        if instruction_no == (len(messages_instructions) - 1):
            button_next_instruction.opacity = 0
            #button_next_instruction.status = PAUSED
        else:
            button_next_instruction.opacity = 1.0
            #button_next_instruction.status = STARTED

        if instruction_no == 0:
            button_previous_instruction.opacity = 0
            #button_previous_instruction.status = PAUSED
        else:
            button_previous_instruction.opacity = 1.0
            #button_previous_instruction.status = STARTED

        ###################################################
        ####________________EVENTS_____________________####
        ###################################################

        keys = event.getKeys()  # Cada llamada al buffer lo vaciía (teoricamente)

        if 'space' in keys:
            continueRoutine = False
    ButtonComponent button_next_instruction
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.5, -0.4)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Siguiente -->
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      callback:
        if instruction_no < len(messages_instructions)-1:
            instruction_no+=1
    ButtonComponent button_previous_instruction
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = <--Anterior
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      callback:
        if 0 < instruction_no:
            instruction_no-=1
    KeyboardComponent key_resp_skip_instructions
      allowedKeys = 'space'
      disabled = True
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine load_screen_config
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        periphereal_region_diameter = 0

        ################################
        ## CONFIGURACION MODIFICABLE: ##
        ################################
        nombre_pantalla = 'pantalla5'
        distancia_eyetracker = 0.65 # m
        alpha = angulo_region_central = 9 # º DEG
      Begin Routine:
        import json
        import math

        def calculate_diameter(excentricity, distance_to_screen, screen_height  = None):
            '''
            Calculates the diameter of circunference correspondint to the excentricity angle depending on the screen height and distance to screen.
            Params:
                -excentricity: angle of the excentricity in degrees
                -distance_to_screen: distance between patient and screen in meters
                -screen_height: height of the screen in meters (default is None, in this case the function will only return the diameter in unit that psychopy understands)
            Returns:
                -diameter_unit: unit diameter (this is the diameter that psychopy understands, it should match with the diameter in meters when used)
                -diameter_m: diameter in meters (this is the real diameter it should have in the screen)
            '''

            if screen_height == None:
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return None, diameter_m
            else:
                diameter_unit = (2 * distance_to_screen * math.sin(math.radians(excentricity)))/screen_height
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return diameter_unit, diameter_m

        # Cargar el archivo JSON
        def cargar_configuracion(nombre_pantalla):
            with open('screen_config.json', 'r') as file:
                config = json.load(file)

            # Seleccionar la configuración específica
            pantalla_config = config.get(nombre_pantalla)

            if pantalla_config:
                nombre = pantalla_config['nombre']
                tamanyo_pulgadas = pantalla_config['tamanyo']
                dim_y = pantalla_config['dim_y']

                print(f'Se ha cargado la siguiente configuracion:\n'
                      f'Pantalla {nombre_pantalla} de {tamanyo_pulgadas} pulgadas con altura {dim_y} m')
                return nombre, tamanyo_pulgadas, dim_y
            else:
                print("Configuración de pantalla no encontrada.")
                return None, None, None  # Devolver None para cada valor esperado

        nombre, tamanyo_pulgadas, dim_y = cargar_configuracion(nombre_pantalla)


        if nombre:  # Comprobar que nombre no es None antes de usar las variables
            # Calcular el diámetro de la frontera de la periferia

            diameter_unit, diameter_m = calculate_diameter(alpha, distancia_eyetracker, dim_y)
            periphereal_region_diameter = diameter_unit

            log = f'Se ha cargado la configuracion de la {nombre_pantalla}:\n Pantalla {nombre} de {tamanyo_pulgadas} pulgadas con altura {dim_y} m.'
            print(log)

        logs2.setText(
                     f'Se ha cargado la configuracion de la {nombre_pantalla}:\n Pantalla {nombre} de {tamanyo_pulgadas} pulgadas con altura {dim_y} m\n'
                     f'Para una distancia de {distancia_eyetracker} m entre el sujeto y la pantalla, el diametro debe ser de {diameter_unit:.2f} u.\n'
                     f'El diámetro equivalente es de {diameter_m:.2f} m'
                     )
    PolygonComponent periphereal_region_result
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 2
      shape = circle
      size [set every repeat] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    PolygonComponent foveal_region_result
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent logs2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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    CodeComponent code_9
      Code Type = Auto->JS
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      Each Frame:
        if t>5:
            continueRoutine = False
  Routine pallete
    RoutineSettingsComponent pallete
      disabled = True
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        gratings = [
        grating_1,
        grating_2,
        grating_3,
        grating_4,
        grating_5,
        grating_6]

        positions = [
        (-0.5, 0.25),
        ( 0,   0.25),
        ( 0.5, 0.25),
        (-0.5,-0.25),
        ( 0,  -0.25),
        ( 0.5,-0.25)
        ]

        contrasts = [
        0,
        0.2,
        0.4,
        0.6,
        0.8,
        1.0
        ]

        for i, grating in enumerate(gratings):
            grating.size = (0.25, 0.25)
            grating.pos = positions[i]
            grating.mask = "circle"
            grating.sf = 10
            grating.contrast = contrasts[i]
    TextComponent logs_3
      letterHeight = 0.025
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    GratingComponent grating_1
      mask = circle
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_2
      pos = (0.5, 0.5)
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_3
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_4
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_5
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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    GratingComponent grating_6
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      tex = sin
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  Routine GazePoint_test
    RoutineSettingsComponent GazePoint_test
      disabled = True
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    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        import socket

        # Host machine IP
        HOST = '127.0.0.1'
        # Gazepoint Port
        PORT = 4242
        ADDRESS = (HOST, PORT)

        # Connect to Gazepoint API
        s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        s.connect(ADDRESS)

        # Send commands to initialize data streaming
        s.send(str.encode('<SET ID="ENABLE_SEND_CURSOR" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_POG_FIX" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DATA" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DIAL" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_HR" STATE="1" />\r\n'))
      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        print(data_r)

        # Parse data string
        FPOGX = 0
        FPOGY = 0
        FPOGV = 0
        CX = 0
        CY = 0
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs.text = f'DIAL: {DIAL}, HR: {HR}'
        print("DIAL:", DIAL)
        print("HR:", HR)
        print("\n")
      End Routine:
        s.close()
    KeyboardComponent key_resp_6
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent GP_logs
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_3
      fillColor = white
      ori [set every frame] = DIAL*360
      shape = line
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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  Routine BL_1_SPATIAL_FREQ
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        frecuencia_monitor = 60
        frecuencia_parpadeo = 30  # Hz, cambia este valor por la frecuencia deseada
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        import math
        import random

        def calculate_diameter(excentricity, distance_to_screen, screen_height  = None):
            '''
            Calculates the diameter of circunference correspondint to the excentricity angle depending on the screen height and distance to screen.
            Params:
                -excentricity: angle of the excentricity in degrees
                -distance_to_screen: distance between patient and screen in meters
                -screen_height: height of the screen in meters (default is None, in this case the function will only return the diameter in unit that psychopy understands)
            Returns:
                -diameter_unit: unit diameter (this is the diameter that psychopy understands, it should match with the diameter in meters when used)
                -diameter_m: diameter in meters (this is the real diameter it should have in the screen)
            '''

            import math

            if screen_height == None:
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return None, diameter_m
            else:
                diameter_unit = (2 * distance_to_screen * math.sin(math.radians(excentricity)))/screen_height
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return diameter_unit, diameter_m

        def calcular_posicion_stim(angulo_grados, excentricidad, altura_pantalla):
            # primero calculo el diametro en pantalla correspondiente a la excentricidad
            diameter_unit, _ = calculate_diameter(excentricidad, 0.65, altura_pantalla)
            radius = diameter_unit / 2

            #hallo el punto donde mostrar el estimulo sobre la circunferencia de la excentricidad deseada
            theta = math.radians(angulo_grados)
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            return stim_x, stim_y

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        stim.sf = frecuencia_espacial
        stim.orientation = orientacion

        #other
        gaze_position = mouse.getPosition()

        logs_parametros_trial.alignText='left'
        logs_parametros_trial.anchorHoriz='left'
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        logs_parametros_trial.setText(
            f"Prueba 1 - Frecuencia espacial\n"
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Excentricidad: {excentricidad}º\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Tamaño Estímulo: {tamanyo:.2f}\n"
            f"Tipo: {tipo}\n"
            f"Frecuencia Espacial: {frecuencia_espacial:.2f}\n"
        )
        '''
        logs_screen_specs.setText(
            f"Pantalla: {nombre_pantalla}\n"
            f"Altura pantalla: {dim_y} m\n"
            f"Tamaño: {tamanyo_pulgadas}\"\n"
            f"Distancia paciente - pantalla (eyetracker): {distancia_eyetracker} m\n"
            f"Diametro umbral periferia-centro (normalizado): {periphereal_region_diameter:.2f} u\n"

        )
        '''
        ####################################################
        #################____SETTINGS____###################
        ####################################################


        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs.setText("La mirada está dentro de la circunferencia")

        else:
            logs.setText("La mirada está fuera de la circunferencia")


        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        # START/STOP: Verifica si se ha presionado la tecla
        keys = event.getKeys()
        if 'space' in keys:
            pass
            #stim_x, stim_y = calcular_posicion_stim(periphereal_region_diameter)
    KeyboardComponent key_resp
      allowedKeys = 'space', 'right', 'left'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    PolygonComponent polygon
      fillColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        import socket

        # Host machine IP
        HOST = '127.0.0.1'
        # Gazepoint Port
        PORT = 4242
        ADDRESS = (HOST, PORT)

        # Connect to Gazepoint API
        s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        s.connect(ADDRESS)

        # Send commands to initialize data streaming
        s.send(str.encode('<SET ID="ENABLE_SEND_CURSOR" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_POG_FIX" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DATA" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DIAL" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_HR" STATE="1" />\r\n'))
      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_2.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background
      fillColor = white
      pos = (-0.5, 0.5)
      shape = rectangle
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_2
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_2
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = 0.05
      pos = (-0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    GratingComponent stim
      color [set every repeat] = $[1,1,1]
      contrast [set every repeat] = 1
      mask = gauss
      ori [set every repeat] = orientacion
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      tex = sqr
      texture resolution = 512
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    PolygonComponent gaze
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos [set every frame] = gaze_position
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine TEMPLATE_ROUTINE
    RoutineSettingsComponent TEMPLATE_ROUTINE
      disabled = True
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    CodeComponent code_12
      Code Type = Auto->JS
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      Before Experiment:
        frecuencia_monitor = 60
        frecuencia_parpadeo = 30  # Hz, cambia este valor por la frecuencia deseada
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        import math
        import random

        def calculate_diameter(excentricity, distance_to_screen, screen_height  = None):
            '''
            Calculates the diameter of circunference correspondint to the excentricity angle depending on the screen height and distance to screen.
            Params:
                -excentricity: angle of the excentricity in degrees
                -distance_to_screen: distance between patient and screen in meters
                -screen_height: height of the screen in meters (default is None, in this case the function will only return the diameter in unit that psychopy understands)
            Returns:
                -diameter_unit: unit diameter (this is the diameter that psychopy understands, it should match with the diameter in meters when used)
                -diameter_m: diameter in meters (this is the real diameter it should have in the screen)
            '''

            import math

            if screen_height == None:
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return None, diameter_m
            else:
                diameter_unit = (2 * distance_to_screen * math.sin(math.radians(excentricity)))/screen_height
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return diameter_unit, diameter_m

        def calcular_posicion_stim(angulo_grados, excentricidad, altura_pantalla):
            # primero calculo el diametro en pantalla correspondiente a la excentricidad
            diameter_unit, _ = calculate_diameter(excentricidad, 0.65, altura_pantalla)
            radius = diameter_unit / 2

            #hallo el punto donde mostrar el estimulo sobre la circunferencia de la excentricidad deseada
            theta = math.radians(angulo_grados)
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            return stim_x, stim_y

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        stim.sf = frecuencia_espacial
        stim.orientation = orientacion

        #other
        gaze_position = mouse.getPosition()
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        logs_parametros_trial.setText(
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Posicion Angular: {posicion_angular:.2f}\n"
            f"Excentricidad: {excentricidad}º\n"
            f"Diametro 9º: {diametros_central_periferica[0]:.2f}, {diametros_central_periferica[1]:.2f}\n"
            f"Diametro {excentricidad}º: {diametros_estimulo[0]:.2f}, {diametros_estimulo[1]:.2f}\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Frecuencia Espacial: {frecuencia_espacial:.2f}\n"
            f"Frecuencia Temporal: {frecuencia_temporal:.3f}\n"
            f"Contraste: {contraste:.2f}\n"
            f"Color: {color_r},{color_g},{color_b}\n"
            f"Tamaño: {tamanyo:.2f}\n"
            f"FFT: {FFT:.2f}\n"
        )

        logs_screen_specs.setText(
            f"Pantalla: {nombre_pantalla}\n"
            f"Altura pantalla: {dim_y} m\n"
            f"Tamaño: {tamanyo_pulgadas}\"\n"
            f"Distancia paciente - pantalla (eyetracker): {distancia_eyetracker} m\n"
            f"Diametro umbral periferia-centro (normalizado): {periphereal_region_diameter:.2f} u\n"

        )
        ####################################################
        #################____SETTINGS____###################
        ####################################################

        stim.setPhase(frecuencia_temporal,'+')
        #stim.setPhase(0.01,'+')
        stim.draw()

        #dots_no = noise_dots_no # prueba --> cargar variable del csv y volcar al estimulo

        ## FFT if activated

        if FFT != 0:
            frames_por_ciclo = int((frecuencia_monitor / FFT) / 2)
            opacidad = 1 if (frameN % (2 * frames_por_ciclo)) < frames_por_ciclo else 0
        else:
            opacidad = 1

        stim.opacity = opacidad

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs.setText("La mirada está dentro de la circunferencia")

        else:
            logs.setText("La mirada está fuera de la circunferencia")


        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        # START/STOP: Verifica si se ha presionado la tecla
        keys = event.getKeys()
        if 'space' in keys:
            pass
            #stim_x, stim_y = calcular_posicion_stim(periphereal_region_diameter)
    PolygonComponent periphereal_region_4
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      pos = foveal_region_pos
      shape = circle
      size [set every repeat] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    PolygonComponent gaze_fixation_3
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      pos = foveal_region_pos
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    SliderComponent slider_5
      disabled = True
      forceEndRoutine = False
      granularity = 0
      initVal = 0.1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    GratingComponent stim_4
      color [set every repeat] = color_r, color_g, color_b
      contrast [set every repeat] = contraste
      mask = gauss
      ori [set every repeat] = orientacion
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    DotsComponent noise_7
      coherence = 1.0
      dir = 0.0
      dotLife = 10
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.8,1]
      nDots = 14000
      noiseDots = direction
      opacity [set every frame] = 1
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
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    DotsComponent noise_8
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 10
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.8,1]
      nDots = 14000
      noiseDots = direction
      opacity [set every frame] = 1
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
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    EyetrackerRecordComponent etRecord_3
      actionType = Start and Stop
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    RegionOfInterestComponent roi_3
      anchor = center
      debug = False
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = circle
      size = (0.35, 0.35)
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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    PolygonComponent polygon_5
      fillColor = white
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_4
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_screen_specs_3
      letterHeight = 0.02
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend_3
      Code Type = Auto->JS
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      Begin Routine:
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      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_2.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background_5
      fillColor = white
      pos = (-0.5, 0.5)
      shape = rectangle
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_6
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.7, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent DIAL_REPRESENTATION_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      ori [set every frame] = DIAL*360
      shape = rectangle
      size = (0.01, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent gaze_3
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos [set every frame] = gaze_position
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent code_13
      Code Type = Auto->JS
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      Each Frame:
        if t>5:
            continueRoutine = False
  Routine BL_8_TEMPORAL_FREQ
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    CodeComponent code_10
      Code Type = Auto->JS
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      Before Experiment:
        frecuencia_monitor = 60
        frecuencia_parpadeo = 30  # Hz, cambia este valor por la frecuencia deseada
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        import math
        import random

        def calculate_diameter(excentricity, distance_to_screen, screen_height  = None):
            '''
            Calculates the diameter of circunference correspondint to the excentricity angle depending on the screen height and distance to screen.
            Params:
                -excentricity: angle of the excentricity in degrees
                -distance_to_screen: distance between patient and screen in meters
                -screen_height: height of the screen in meters (default is None, in this case the function will only return the diameter in unit that psychopy understands)
            Returns:
                -diameter_unit: unit diameter (this is the diameter that psychopy understands, it should match with the diameter in meters when used)
                -diameter_m: diameter in meters (this is the real diameter it should have in the screen)
            '''

            import math

            if screen_height == None:
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return None, diameter_m
            else:
                diameter_unit = (2 * distance_to_screen * math.sin(math.radians(excentricity)))/screen_height
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return diameter_unit, diameter_m

        def calcular_posicion_stim(angulo_grados, excentricidad, altura_pantalla):
            # primero calculo el diametro en pantalla correspondiente a la excentricidad
            diameter_unit, _ = calculate_diameter(excentricidad, 0.65, altura_pantalla)
            radius = diameter_unit / 2

            #hallo el punto donde mostrar el estimulo sobre la circunferencia de la excentricidad deseada
            theta = math.radians(angulo_grados)
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            return stim_x, stim_y

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        stim_3.sf = frecuencia_espacial
        stim_3.orientation = orientacion

        #other
        gaze_position = mouse.getPosition()
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada_3.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        logs_parametros_trial_3.setText(
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Posicion Angular: {posicion_angular:.2f}\n"
            f"Excentricidad: {excentricidad}º\n"
            f"Diametro 9º: {diametros_central_periferica[0]:.2f}, {diametros_central_periferica[1]:.2f}\n"
            f"Diametro {excentricidad}º: {diametros_estimulo[0]:.2f}, {diametros_estimulo[1]:.2f}\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Frecuencia Temporal: {frecuencia_temporal:.3f}\n"
            f"Tamaño: {tamanyo:.2f}\n"
        )

        logs_screen_specs_2.setText(
            f"Pantalla: {nombre_pantalla}\n"
            f"Altura pantalla: {dim_y} m\n"
            f"Tamaño: {tamanyo_pulgadas}\"\n"
            f"Distancia paciente - pantalla (eyetracker): {distancia_eyetracker} m\n"
            f"Diametro umbral periferia-centro (normalizado): {periphereal_region_diameter:.2f} u\n"

        )
        ####################################################
        #################____SETTINGS____###################
        ####################################################

        stim_3.setPhase(frecuencia_temporal,'+')
        #stim.setPhase(0.01,'+')
        stim_3.draw()

        #dots_no = noise_dots_no # prueba --> cargar variable del csv y volcar al estimulo

        ## FFT if activated

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs_4.setText("La mirada está dentro de la circunferencia")

        else:
            logs_4.setText("La mirada está fuera de la circunferencia")


        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        # START/STOP: Verifica si se ha presionado la tecla
        keys = event.getKeys()
        if 'space' in keys:
            pass
            #stim_x, stim_y = calcular_posicion_stim(periphereal_region_diameter)
    PolygonComponent periphereal_region_3
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      pos = foveal_region_pos
      shape = circle
      size [set every repeat] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    PolygonComponent gaze_fixation_2
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      lineWidth = 3
      pos = foveal_region_pos
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    SliderComponent slider_4
      disabled = True
      forceEndRoutine = False
      granularity = 0
      initVal = 0.1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    GratingComponent stim_3
      color [set every repeat] = 1.0000, 1.0000, 1.0000
      contrast [set every repeat] = 1
      mask = gauss
      ori [set every repeat] = orientacion
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    DotsComponent noise_5
      coherence = 1.0
      dir = 0.0
      dotLife = 10
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.8,1]
      nDots = 14000
      noiseDots = direction
      opacity [set every frame] = 1
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
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    DotsComponent noise_6
      coherence = 1.0
      color = -1.0000, -1.0000, -1.0000
      dir = 0.0
      dotLife = 10
      dotSize = 3
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = [1.8,1]
      nDots = 14000
      noiseDots = direction
      opacity [set every frame] = 1
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
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    PolygonComponent polygon_4
      fillColor = white
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_3
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_screen_specs_2
      letterHeight = 0.02
      pos = (-0.5, -0.25)
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
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      Each Frame:
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      End Routine:
        s.close()
    PolygonComponent logs_background_3
      fillColor = white
      pos = (-0.5, 0.5)
      shape = rectangle
      size = (1, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_4
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_3
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = 0.05
      pos = (-0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.7, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent DIAL_REPRESENTATION_2
      disabled = True
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      ori [set every frame] = DIAL*360
      shape = rectangle
      size = (0.01, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent gaze_2
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      pos [set every frame] = gaze_position
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent code_11
      Code Type = Auto->JS
      disabled = True
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      Each Frame:
        if t>5:
            continueRoutine = False
  Routine BL_3_CONTRAST
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    CodeComponent code_8
      Code Type = Auto->JS
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      Before Experiment:
        frecuencia_monitor = 60
        frecuencia_parpadeo = 30  # Hz, cambia este valor por la frecuencia deseada
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        import math
        import random

        def calculate_diameter(excentricity, distance_to_screen, screen_height  = None):
            '''
            Calculates the diameter of circunference correspondint to the excentricity angle depending on the screen height and distance to screen.
            Params:
                -excentricity: angle of the excentricity in degrees
                -distance_to_screen: distance between patient and screen in meters
                -screen_height: height of the screen in meters (default is None, in this case the function will only return the diameter in unit that psychopy understands)
            Returns:
                -diameter_unit: unit diameter (this is the diameter that psychopy understands, it should match with the diameter in meters when used)
                -diameter_m: diameter in meters (this is the real diameter it should have in the screen)
            '''

            import math

            if screen_height == None:
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return None, diameter_m
            else:
                diameter_unit = (2 * distance_to_screen * math.sin(math.radians(excentricity)))/screen_height
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return diameter_unit, diameter_m

        def calcular_posicion_stim(angulo_grados, excentricidad, altura_pantalla):
            # primero calculo el diametro en pantalla correspondiente a la excentricidad
            diameter_unit, _ = calculate_diameter(excentricidad, 0.65, altura_pantalla)
            radius = diameter_unit / 2

            #hallo el punto donde mostrar el estimulo sobre la circunferencia de la excentricidad deseada
            theta = math.radians(angulo_grados)
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            return stim_x, stim_y

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        stim_5.sf = frecuencia_espacial
        stim_5.orientation = orientacion

        #other
        gaze_position = mouse.getPosition()

        logs_parametros_trial_5.alignText='left'
        logs_parametros_trial_5.anchorHoriz='left'
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada_5.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        logs_parametros_trial_5.setText(
            f"Prueba 3 - Contraste\n"
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Excentricidad: {excentricidad}º\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Tamaño Estímulo: {tamanyo:.2f}\n"
            f"Tipo: {tipo}\n"
            f"Contraste: {contraste:.2f}\n"
        )
        '''
        logs_screen_specs.setText(
            f"Pantalla: {nombre_pantalla}\n"
            f"Altura pantalla: {dim_y} m\n"
            f"Tamaño: {tamanyo_pulgadas}\"\n"
            f"Distancia paciente - pantalla (eyetracker): {distancia_eyetracker} m\n"
            f"Diametro umbral periferia-centro (normalizado): {periphereal_region_diameter:.2f} u\n"

        )
        '''
        ####################################################
        #################____SETTINGS____###################
        ####################################################


        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs_6.setText("La mirada está dentro de la circunferencia")

        else:
            logs_6.setText("La mirada está fuera de la circunferencia")


        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        # START/STOP: Verifica si se ha presionado la tecla
        keys = event.getKeys()
        if 'space' in keys:
            pass
            #stim_x, stim_y = calcular_posicion_stim(periphereal_region_diameter)
    KeyboardComponent key_resp_9
      allowedKeys = 'space', 'right', 'left'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    PolygonComponent polygon_6
      fillColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend_5
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
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      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_5.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background_7
      fillColor = white
      pos = (-0.5, 0.5)
      shape = rectangle
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_8
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_5
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_5
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_5
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = 0.05
      pos = (-0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    GratingComponent stim_5
      color [set every repeat] = $[1,1,1]
      contrast [set every repeat] = contraste
      mask = gauss
      ori [set every repeat] = orientacion
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      tex = sqr
      texture resolution = 512
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    PolygonComponent gaze_5
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos [set every frame] = gaze_position
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine BL_2_COLOR
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    CodeComponent code_14
      Code Type = Auto->JS
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      Before Experiment:
        frecuencia_monitor = 60
        frecuencia_parpadeo = 30  # Hz, cambia este valor por la frecuencia deseada
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        import math
        import random

        def calculate_diameter(excentricity, distance_to_screen, screen_height  = None):
            '''
            Calculates the diameter of circunference correspondint to the excentricity angle depending on the screen height and distance to screen.
            Params:
                -excentricity: angle of the excentricity in degrees
                -distance_to_screen: distance between patient and screen in meters
                -screen_height: height of the screen in meters (default is None, in this case the function will only return the diameter in unit that psychopy understands)
            Returns:
                -diameter_unit: unit diameter (this is the diameter that psychopy understands, it should match with the diameter in meters when used)
                -diameter_m: diameter in meters (this is the real diameter it should have in the screen)
            '''

            import math

            if screen_height == None:
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return None, diameter_m
            else:
                diameter_unit = (2 * distance_to_screen * math.sin(math.radians(excentricity)))/screen_height
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return diameter_unit, diameter_m

        def calcular_posicion_stim(angulo_grados, excentricidad, altura_pantalla):
            # primero calculo el diametro en pantalla correspondiente a la excentricidad
            diameter_unit, _ = calculate_diameter(excentricidad, 0.65, altura_pantalla)
            radius = diameter_unit / 2

            #hallo el punto donde mostrar el estimulo sobre la circunferencia de la excentricidad deseada
            theta = math.radians(angulo_grados)
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            return stim_x, stim_y

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        #stim_6.sf = frecuencia_espacial
        #stim_6.orientation = orientacion
        #stim_img.orientation = orientacion

        #other
        gaze_position = mouse.getPosition()

        logs_parametros_trial_6.alignText='left'
        logs_parametros_trial_6.anchorHoriz='left'
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada_6.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        logs_parametros_trial_6.setText(
            f"Prueba 2 - Color/saturación\n"
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Excentricidad: {excentricidad}º\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Tamaño Estímulo: {tamanyo:.2f}\n"
            f"Tipo: {tipo}\n"
            #f"Saturacion: {saturacion:.2f}\n"
        )
        '''
        logs_screen_specs.setText(
            f"Pantalla: {nombre_pantalla}\n"
            f"Altura pantalla: {dim_y} m\n"
            f"Tamaño: {tamanyo_pulgadas}\"\n"
            f"Distancia paciente - pantalla (eyetracker): {distancia_eyetracker} m\n"
            f"Diametro umbral periferia-centro (normalizado): {periphereal_region_diameter:.2f} u\n"

        )
        '''
        ####################################################
        #################____SETTINGS____###################
        ####################################################


        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs_7.setText("La mirada está dentro de la circunferencia")

        else:
            logs_7.setText("La mirada está fuera de la circunferencia")


        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        # START/STOP: Verifica si se ha presionado la tecla
        keys = event.getKeys()
        if 'space' in keys:
            pass
            #stim_x, stim_y = calcular_posicion_stim(periphereal_region_diameter)
    KeyboardComponent key_resp_10
      allowedKeys = 'space', 'right', 'left'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    PolygonComponent polygon_7
      fillColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend_6
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
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      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        DIAL = 0
        HR = 0

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("DIAL=") != -1):
                print(el.split("\""))
                DIAL = float(el.split("\"")[1])
            if  (el.find("HR=") != -1):
                HR = float(el.split("\"")[1])

        # Print results

        GP_logs_5.text = f'DIAL: {DIAL}, HR: {HR}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    PolygonComponent logs_background_9
      fillColor = white
      pos = (-0.5, 0.5)
      shape = rectangle
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_10
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_6
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_6
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_6
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = 0.05
      pos = (-0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent gaze_6
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos [set every frame] = gaze_position
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    CodeComponent code_stim_backend
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
        from PIL import Image
        import matplotlib.pyplot as plt


        def save_gabor_patch_image(frequency, size, c1, c2):
            amp, f = generate_gabor_patch(frequency, size)

            # Convertir colores a numpy arrays y expandir dimensiones para el canal de transparencia
            c1 = np.array(c1)
            c2 = np.array(c2)

            # Calcular los valores de color para el parche
            im_rgb_vals = (c1 * amp[:, :, None]) + (c2 * (1 - amp[:, :, None]))

            # Crear el canal de alfa (transparencia): 1 donde hay el parche, 0 en el fondo
            alpha_channel = f

            # Combinar los valores RGB con el canal alfa para crear una imagen RGBA
            im_rgba_vals = np.dstack((im_rgb_vals, alpha_channel))

            # Convertir a imagen
            im = Image.fromarray((im_rgba_vals * 255).astype('uint8'), 'RGBA')
            im.save(f"C:/Users/akoun/Desktop/Biocruces/siburmuin/src/begiBrainDemo/images/custom_stim.png")

        def generate_gabor_patch(frequency, size):
            im_range = np.arange(size)
            x, y = np.meshgrid(im_range, im_range)
            dx = x - size // 2
            dy = y - size // 2
            t = np.arctan2(dy, dx)
            r = np.sqrt(dx ** 2 + dy ** 2)
            x = r * np.cos(t)
            y = r * np.sin(t)

            # Transición brusca para los colores (líneas) en el patrón Gabor
            amp = np.where(np.cos(2 * np.pi * (x * frequency)) >= 0, 1, 0)
            f = np.where(r <= size // 2, 1, 0)

            return amp, f
      Begin Routine:
        import random

        def random_frequency():
            return random.uniform(0.01, 0.1)

        # Parámetros aleatorios
        frequency = random_frequency()
        size = 500
        c1 = [color_1_r,color_1_g,color_1_b]
        c2 = [color_2_r,color_2_g,color_2_b]

        #logs.text = f'freq = {frequency:.2f}\nc1 = ({c1[0]:.2f}, {c1[1]:.2f}, {c1[2]:.2f})\nc2 = ({c2[0]:.2f}, {c2[1]:.2f}, {c2[2]:.2f})'
        # Generar el parche de Gabor
        save_gabor_patch_image(frequency, size, c1, c2)
    ImageComponent stim_img
      image [set every repeat] = C:\Users\akoun\Desktop\Biocruces\siburmuin\src\begiBrainDemo\images\custom_stim.png
      ori [set every repeat] = orientacion
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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  Routine BL_4_TEMPORAL_FREQ
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    CodeComponent code_15
      Code Type = Auto->JS
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      Before Experiment:
        frecuencia_monitor = 60
        frecuencia_parpadeo = 10  # Hz, cambia este valor por la frecuencia deseada
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        #other
        gaze_position = mouse.getPosition()
      Begin Routine:
        import math
        import random

        def calculate_diameter(excentricity, distance_to_screen, screen_height  = None):
            '''
            Calculates the diameter of circunference correspondint to the excentricity angle depending on the screen height and distance to screen.
            Params:
                -excentricity: angle of the excentricity in degrees
                -distance_to_screen: distance between patient and screen in meters
                -screen_height: height of the screen in meters (default is None, in this case the function will only return the diameter in unit that psychopy understands)
            Returns:
                -diameter_unit: unit diameter (this is the diameter that psychopy understands, it should match with the diameter in meters when used)
                -diameter_m: diameter in meters (this is the real diameter it should have in the screen)
            '''

            import math

            if screen_height == None:
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return None, diameter_m
            else:
                diameter_unit = (2 * distance_to_screen * math.sin(math.radians(excentricity)))/screen_height
                diameter_m = 2 * distance_to_screen * math.sin(math.radians(excentricity))
                return diameter_unit, diameter_m

        def calcular_posicion_stim(angulo_grados, excentricidad, altura_pantalla):
            # primero calculo el diametro en pantalla correspondiente a la excentricidad
            diameter_unit, _ = calculate_diameter(excentricidad, 0.65, altura_pantalla)
            radius = diameter_unit / 2

            #hallo el punto donde mostrar el estimulo sobre la circunferencia de la excentricidad deseada
            theta = math.radians(angulo_grados)
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            return stim_x, stim_y

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular, excentricidad, dim_y)
        diametros_central_periferica = calculate_diameter(9, 0.65, dim_y)
        diametros_estimulo = calculate_diameter(excentricidad, 0.65, dim_y)

        stim_7.sf = frecuencia_espacial
        stim_7.orientation = orientacion

        #other
        gaze_position = mouse.getPosition()

        logs_parametros_trial_7.alignText='left'
        logs_parametros_trial_7.anchorHoriz='left'
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada_7.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')

        logs_parametros_trial_7.setText(
            f"Prueba 4 - Frecuencia Temporal\n"
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Excentricidad: {excentricidad}º\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Tamaño Estímulo: {tamanyo:.2f}\n"
            f"Tipo: {tipo}\n"
            f"FFT: {FFT:.2f}\n"
        )
        '''
        logs_screen_specs.setText(
            f"Pantalla: {nombre_pantalla}\n"
            f"Altura pantalla: {dim_y} m\n"
            f"Tamaño: {tamanyo_pulgadas}\"\n"
            f"Distancia paciente - pantalla (eyetracker): {distancia_eyetracker} m\n"
            f"Diametro umbral periferia-centro (normalizado): {periphereal_region_diameter:.2f} u\n"

        )
        '''
        ####################################################
        #################_______FFT______###################
        ####################################################
        frames_por_ciclo = int((frecuencia_monitor / FFT) / 2)
        opacidad = 1 if (frameN % (2 * frames_por_ciclo)) < frames_por_ciclo else 0
        stim_7.opacity = opacidad

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs_8.setText("La mirada está dentro de la circunferencia")

        else:
            logs_8.setText("La mirada está fuera de la circunferencia")


        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        # START/STOP: Verifica si se ha presionado la tecla
        keys = event.getKeys()
        if 'space' in keys:
            pass
            #stim_x, stim_y = calcular_posicion_stim(periphereal_region_diameter)
    KeyboardComponent key_resp_11
      allowedKeys = 'space', 'right', 'left'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    PolygonComponent polygon_8
      fillColor = 0.0000, 0.0000, 0.0000
      saveStartStop = False
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent GP_data_adq_backend_7
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
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      Each Frame:
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      End Routine:
        s.close()
    PolygonComponent logs_background_11
      fillColor = white
      pos = (-0.5, 0.5)
      shape = rectangle
      size = (1, 0.3)
      startVal [time (s)] = 0.0
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    PolygonComponent logs_background_12
      fillColor = white
      pos = (0.75, 0)
      shape = rectangle
      size = (0.5, 1)
      startVal [time (s)] = 0.0
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    TextComponent logs_8
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_7
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.025
      pos = (0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_7
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_7
      color = -1.0000, -1.0000, -1.0000
      disabled = True
      letterHeight = 0.05
      pos = (-0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    GratingComponent stim_7
      color [set every repeat] = $[1,1,1]
      contrast [set every repeat] = 1
      mask = gauss
      ori [set every repeat] = orientacion
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      tex = sqr
      texture resolution = 512
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    PolygonComponent gaze_7
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos [set every frame] = gaze_position
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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  Routine gabor_trial
    RoutineSettingsComponent gabor_trial
      disabled = True
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    CodeComponent code_16
      Code Type = Auto->JS
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      Before Experiment:
        import numpy as np
        from PIL import Image
        import matplotlib.pyplot as plt


        def save_gabor_patch_image(frequency, size, c1, c2):
            amp, f = generate_gabor_patch(frequency, size)

            # Convertir colores a numpy arrays y expandir dimensiones para el canal de transparencia
            c1 = np.array(c1)
            c2 = np.array(c2)

            # Calcular los valores de color para el parche
            im_rgb_vals = (c1 * amp[:, :, None]) + (c2 * (1 - amp[:, :, None]))

            # Crear el canal de alfa (transparencia): 1 donde hay el parche, 0 en el fondo
            alpha_channel = f

            # Combinar los valores RGB con el canal alfa para crear una imagen RGBA
            im_rgba_vals = np.dstack((im_rgb_vals, alpha_channel))

            # Convertir a imagen
            im = Image.fromarray((im_rgba_vals * 255).astype('uint8'), 'RGBA')
            im.save(f"C:/Users/akoun/Desktop/Biocruces/siburmuin/src/begiBrainDemo/images/custom_stim.png")

        def generate_gabor_patch(frequency, size):
            im_range = np.arange(size)
            x, y = np.meshgrid(im_range, im_range)
            dx = x - size // 2
            dy = y - size // 2
            t = np.arctan2(dy, dx)
            r = np.sqrt(dx ** 2 + dy ** 2)
            x = r * np.cos(t)
            y = r * np.sin(t)

            # Transición brusca para los colores (líneas) en el patrón Gabor
            amp = np.where(np.cos(2 * np.pi * (x * frequency)) >= 0, 1, 0)
            f = np.where(r <= size // 2, 1, 0)

            return amp, f
      Begin Routine:
        import random

        #def random_color():
        #    return (random.random(), random.random(), random.random())

        def random_frequency():
            return random.uniform(0.01, 0.1)

        # Parámetros aleatorios
        frequency = random_frequency()
        size = 500
        c1 = [color_1_r,color_1_g,color_1_b]#random_color()
        c2 = [color_2_r,color_2_g,color_2_b]

        logs.text = f'freq = {frequency:.2f}\nc1 = ({c1[0]:.2f}, {c1[1]:.2f}, {c1[2]:.2f})\nc2 = ({c2[0]:.2f}, {c2[1]:.2f}, {c2[2]:.2f})'
        # Generar el parche de Gabor
        save_gabor_patch_image(frequency, size, c1, c2)
    ImageComponent image
      image [set every repeat] = C:\Users\akoun\Desktop\Biocruces\siburmuin\src\begiBrainDemo\images\custom_stim.png
      ori = 20
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent logs_9
      letterHeight = 0.025
      pos = (0.6, 0.35)
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine calibration_routine
  Routine TEMPLATE_ROUTINE
  Routine load_screen_config
  LoopInitiator trials_bl_1 loopType="TrialHandler"
    Selected rows = 0:15
    conditionsFile = BL1.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 1), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 5), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 2), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 3), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 15), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 4), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 20), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 5), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 25), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 6), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 5), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 7), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 8), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 15), ('tamanyo', 0.25)]),
      OrderedDict([('intento', 9), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 20), ('tamanyo', 0.25)])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
    Routine BL_1_SPATIAL_FREQ
  LoopTerminator trials_bl_1
  LoopInitiator trials_bl_2 loopType="TrialHandler"
    Selected rows = 0:15
    conditionsFile = BL2.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 1.0), ('orientacion', 45.0), ('posicion_angular', 0.0), ('tipo', 'magno'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 1.0)]),
      OrderedDict([('intento', 2.0), ('orientacion', 135.0), ('posicion_angular', 0.0), ('tipo', 'magno'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.75)]),
      OrderedDict([('intento', 3.0), ('orientacion', 45.0), ('posicion_angular', 0.0), ('tipo', 'magno'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.5)]),
      OrderedDict([('intento', 4.0), ('orientacion', 135.0), ('posicion_angular', 0.0), ('tipo', 'magno'), ('excentricidad', 0.0), ('frecuencia_espacial', 10.0), ('tamanyo', 0.25), ('color_1_r', 1.0), ('color_1_g', 1.0), ('color_1_b', 1.0), ('color_2_r', 1.0), ('color_2_g', 1.0), ('color_2_b', 1.0), ('contraste', 0.25)])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
    Routine BL_2_COLOR
  LoopTerminator trials_bl_2
  Routine gabor_trial
  LoopInitiator trials_bl_3 loopType="TrialHandler"
    Selected rows = 0:15
    conditionsFile = BL3.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 1), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('contraste', 1.0)]),
      OrderedDict([('intento', 2), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('contraste', 0.5)]),
      OrderedDict([('intento', 3), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('contraste', 0.25)]),
      OrderedDict([('intento', 4), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('contraste', 0.1)]),
      OrderedDict([('intento', 5), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('contraste', 0.05)]),
      OrderedDict([('intento', 6), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('contraste', 0.001)]),
      OrderedDict([('intento', 7), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('contraste', 1.0)]),
      OrderedDict([('intento', 8), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('contraste', 0.5)])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
    Routine BL_3_CONTRAST
  LoopTerminator trials_bl_3
  LoopInitiator trials_bl_4 loopType="TrialHandler"
    conditionsFile = BL4.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 1), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('FFT', 10)]),
      OrderedDict([('intento', 2), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('FFT', 10)]),
      OrderedDict([('intento', 3), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('FFT', 10)]),
      OrderedDict([('intento', 4), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('FFT', 10)]),
      OrderedDict([('intento', 5), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'magno'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('FFT', 10)]),
      OrderedDict([('intento', 6), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('FFT', 10)]),
      OrderedDict([('intento', 7), ('orientacion', 45), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('FFT', 10)]),
      OrderedDict([('intento', 8), ('orientacion', 135), ('posicion_angular', 0), ('tipo', 'neutro'), ('excentricidad', 0), ('frecuencia_espacial', 10), ('tamanyo', 0.25), ('FFT', 10)])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
    Routine BL_4_TEMPORAL_FREQ
  LoopTerminator trials_bl_4
  Routine break_5s_
  Routine break_5s_
