PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  expName = eye_tracking_protocol_demo
  keyboardBackend = ioHub
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Routines
  Routine FIJACION_CENTRAL
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    CodeComponent end_of_routine
      Code Type = Auto->JS
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      Each Frame:
        if t>central_fixation_routine_time:
            continueRoutine = False
    CodeComponent GP_data_adq_backend
      Code Type = Py
      disabled = True
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      Begin Experiment:
        def convert_to_psychopy_units(FPOGX, FPOGY, screen_bounds):
            """
            Convierte las coordenadas normalizadas de Gazepoint a coordenadas centradas
            en el sistema de PsychoPy.

            Parámetros:
            - FPOGX: Coordenada X normalizada de Gazepoint (0 a 1)
            - FPOGY: Coordenada Y normalizada de Gazepoint (0 a 1)
            - screen_bounds: Límites de la pantalla en PsychoPy, donde los valores
              se definen como (x_min, y_max, x_max, y_min)

            Retorna:
            - Coordenadas X y Y centradas en el sistema de PsychoPy
            """

            x_min, y_max, x_max, y_min = screen_bounds

            # Mapeo de FPOGX (0.0 a 1.0) a PsychoPy (x_min a x_max)
            x_psychopy = x_min + (FPOGX * (x_max - x_min))

            # Mapeo de FPOGY (0.0 a 1.0) a PsychoPy (y_min a y_max)
            y_psychopy = -(y_min + (FPOGY * (y_max - y_min)))

            return x_psychopy, y_psychopy


        screen_bounds = (-0.89, 0.5, 0.89, -0.5)  # Definir los límites de la pantalla en unidades PsychoPy (x_min, y_max, x_max, y_min)
      Begin Routine:
        import socket

        # Host machine IP
        HOST = '127.0.0.1'
        # Gazepoint Port
        PORT = 4242
        ADDRESS = (HOST, PORT)

        # Connect to Gazepoint API
        s = socket.socket(socket.AF_INET, socket.SOCK_STREAM)
        s.connect(ADDRESS)

        # Send commands to initialize data streaming
        s.send(str.encode('<SET ID="ENABLE_SEND_CURSOR" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_POG_FIX" STATE="1" />\r\n'))
        s.send(str.encode('<SET ID="ENABLE_SEND_DATA" STATE="1" />\r\n'))
        #s.send(str.encode('<SET ID="ENABLE_SEND_DIAL" STATE="1" />\r\n'))
        #s.send(str.encode('<SET ID="ENABLE_SEND_HR" STATE="1" />\r\n'))
      Each Frame:
        # Receive data
        rxdat = s.recv(1024)
        data_r = bytes.decode(rxdat)
        #print(data_r)

        # Parse data string
        FPOGX = -1
        FPOGY = -1

        # Split data string into a list of name="value" substrings
        datalist = data_r.split(" ")
        #print(datalist)

        # Iterate through list of substrings to extract data values
        for el in datalist:
            if (el.find("FPOGX") != -1):
                FPOGX = float(el.split("\"")[1])  # Coordenada X de la mirada
            if (el.find("FPOGY") != -1):
                FPOGY = float(el.split("\"")[1])  # Coordenada Y de la mirada

        x_psychopy, y_psychopy = convert_to_psychopy_units(FPOGX, FPOGY, screen_bounds)

        gaze_position = (x_psychopy, y_psychopy)

        GP_logs_2.text = f'FPOGX: {FPOGX:.2f}, FPOGY: {FPOGY:.2f}\nX = {x_psychopy:.2f}, Y = {y_psychopy:.2f}'
        GP_logs_3.text = f'FPOGX: {FPOGX:.2f}, FPOGY: {FPOGY:.2f}\nX = {x_psychopy:.2f}, Y = {y_psychopy:.2f}'
        #print("DIAL:", DIAL)
        #print("HR:", HR)
        #print("\n")
      End Routine:
        s.close()
    CodeComponent mouse_as_gaze
      Code Type = Py
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      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse
        gaze_position = mouse.getPosition()
      Each Frame:
        gaze_position = mouse.getPosition()
        #logs_coordenadas_mirada.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')
    TextComponent logs_coordenadas_mirada
      disabled = True
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = white
      saveStartStop = False
      shape = circle
      size = tamanyo_estimulo
      startVal [time (s)] = 0.0
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    PolygonComponent gaze
      fillColor = 1.0000, -1.0000, -1.0000
      lineColor = 1.0000, -1.0000, -1.0000
      opacity = 0.4
      pos [set every frame] = gaze_position
      saveStartStop = False
      shape = circle
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_2
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (-0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent GP_logs_3
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      pos = (0.45, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_2
      disabled = True
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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  Routine STATIC_VARIABLES
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    CodeComponent code
      Code Type = Py
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      Before Experiment:
        # GLOBAL
        tamanyo_estimulo = (0.2, 0.2)

        tiempo_descanso = 5


        # FIJACION CENTRAL
        central_fixation_routine_time = 10


        # SACADAS
        sacade_routine_time = 10
        pos1 = (0,0)
        pos2 = (-0.7,0)
        pos3 = (0.7,0.45)
        pos4 = (-0.7,-0.45)
        pos5 = (-0.7,0.45)

        positions_list = (pos1,pos2,pos3,pos4,pos5,pos1)

        # SEGUIMIENTO

        # LECTURA
        texto_lectura = "El perro corre por el parque. Los niños juegan con la pelota. Ana fue al mercado. Compró frutas frescas y un ramo de flores. Al volver a casa, preparó una ensalada para la cena. El sol brilla en el cielo. El cielo es azul. El viento mueve las hojas de los árboles.\n"
  Routine SACADAS
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    CodeComponent end_of_routine_2
      Code Type = Auto->JS
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      Each Frame:
        if t>sacade_routine_time:
            continueRoutine = False
    CodeComponent positions
      Code Type = Py
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      Begin Experiment:
        actual_position_index = 0
      Begin Routine:
        stim_time = 2
      Each Frame:
        # secuencia de movimientos
        step = 2
        if t>stim_time:
            actual_position_index+=1
            print(f'{t}>{stim_time} - New index i = {actual_position_index}')
            stim_time += step
            print(f"New position: {positions_list[actual_position_index]}")
    PolygonComponent sacade_stimuli
      fillColor = -1.0000, -1.0000, 1.0000
      pos [set every frame] = positions_list[actual_position_index]
      saveStartStop = False
      shape = circle
      size = tamanyo_estimulo
      startVal [time (s)] = 0.0
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  Routine INSTRUCTIONS
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    ImageComponent logo_bio_2
      image = images/BIOBIZKAIA_horizontal_CMYK.png
      pos = (-0.45, 0.35)
      saveStartStop = False
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent logo_compneurolab_2
      image = images/compneuro_horizontal.png
      pos = (0.45, 0.35)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_title_2
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = ANÁLISIS DE MOVIMIENTO OCULAR
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    TextComponent text_instructions_2
      letterHeight = 0.035
      pos = (0, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Routine:
        instruction_no = 0
        messages_instructions = [title]
        for i in range(1, 6):
            var_name = f"instruction_{i}"
            if var_name in globals():
                instruction = globals()[var_name]
                if instruction: # Si la instrucción no esta vacía se añade a la lista que aparecera por pantalla
                    messages_instructions.append(instruction)
        print(f'Lista de instrucciones cargada: {messages_instructions}')
      Each Frame:
        text_instructions_2.text = messages_instructions[instruction_no]

        if instruction_no == (len(messages_instructions) - 1):
            button_next_instruction_2.opacity = 0
            #button_next_instruction.status = PAUSED
        else:
            button_next_instruction_2.opacity = 1.0
            #button_next_instruction.status = STARTED

        if instruction_no == 0:
            button_previous_instruction_2.opacity = 0
            #button_previous_instruction.status = PAUSED
        else:
            button_previous_instruction_2.opacity = 1.0
            #button_previous_instruction.status = STARTED

        ###################################################
        ####________________EVENTS_____________________####
        ###################################################

        keys = event.getKeys()  # Cada llamada al buffer lo vaciía (teoricamente)

        if 'space' in keys:
            continueRoutine = False
    ButtonComponent button_next_instruction_2
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.5, -0.4)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Siguiente -->
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      callback:
        if instruction_no < len(messages_instructions)-1:
            instruction_no+=1
    ButtonComponent button_previous_instruction_2
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = <--Anterior
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      callback:
        if 0 < instruction_no:
            instruction_no-=1
    KeyboardComponent key_resp_skip_instructions_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine SEGUIMIENTO
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    PolygonComponent moving_stimuli
      fillColor = 1.0000, -0.0039, -0.3725
      saveStartStop = False
      shape = circle
      size = tamanyo_estimulo
      startVal [time (s)] = 0.0
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    CodeComponent movement_control_backend
      Code Type = Py
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      Begin Experiment:
        # Definir una lista de puntos [(x, y)] por los que pasará el estímulo
        puntos = [(-0.89, 0), (-0.5, 0.3), (0, 0), (0.5, -0.3), (0.89, 0)]

        # Índice del punto actual
        indice_punto = 0

        # Posición inicial
        moving_stimuli.pos = puntos[indice_punto]

        velocidad = 0.005  # Velocidad del movimiento
      Begin Routine:
        # Reiniciar el tiempo al comenzar la rutina
        #t0 = 0
      Each Frame:
        # Tiempo transcurrido
        #t = t - t0

        # Obtener el siguiente punto de la lista
        siguiente_punto = puntos[indice_punto]

        # Calcular la dirección hacia el siguiente punto
        direccion = [siguiente_punto[0] - moving_stimuli.pos[0], siguiente_punto[1] - moving_stimuli.pos[1]]

        # Normalizar la dirección
        norma = (direccion[0]**2 + direccion[1]**2) ** 0.5
        if norma > 0:
            direccion_normalizada = [direccion[0] / norma, direccion[1] / norma]
        else:
            direccion_normalizada = [0, 0]

        # Mover el estímulo hacia el siguiente punto
        moving_stimuli.pos = [moving_stimuli.pos[0] + direccion_normalizada[0] * velocidad,
                              moving_stimuli.pos[1] + direccion_normalizada[1] * velocidad]

        # Verificar si el estímulo ha alcanzado el siguiente punto
        if norma < 0.05:  # Tolerancia para considerar que ha llegado al punto
            indice_punto += 1
            if indice_punto >= len(puntos):
                indice_punto = 0  # Reiniciar a la primera posición
    CodeComponent end_of_routine_3
      Code Type = Auto->JS
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      Each Frame:
        if t>sacade_routine_time:
            continueRoutine = False
  Routine LECTURA
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    CodeComponent end_of_routine_4
      Code Type = Auto->JS
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      Each Frame:
        if t>sacade_routine_time:
            continueRoutine = False
    TextComponent text_lectura
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = $texto_lectura
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    CodeComponent text_config
      Code Type = Py
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      Begin Routine:
        # Tamaño de la letra
        text_lectura.height = 0.05
        text_lectura.alignHoriz = 'left'
        text_lectura.color = 'white'
  Routine DESCANSO
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tiempo_descanso
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      text [set every frame]:
        $str(tiempo_descanso-int(t))
    TextComponent texto_descanso
      letterHeight = 0.05
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tiempo_descanso
      text = Descanso
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = tiempo_descanso
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Flow
  Routine STATIC_VARIABLES
  LoopInitiator instructions loopType="TrialHandler"
    conditions = [{'title': 'SPATIAL FREQUENCY THRESHOLD STAIRCASE TEST', 'instruction_1': 'En este experimento, evaluaremos tu capacidad para percibir las líneas de un patrón visual conocido como parche de Gabor', 'instruction_2': 'Observa la pantalla: Aparecerá un patrón de líneas', 'instruction_3': 'Si puedes ver las líneas del patrón, pulsa la tecla S. Si no puedes ver las líneas (parece una imagen borrosa o uniforme), pulsa la tecla N.', 'instruction_4': 'No te preocupes por acertar, lo importante es que indiques lo que ves.', 'instruction_5': 'Pulsa la barra espaciadora cuando quieras empezar la prueba'}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
    conditionsFile = instructions/instructions_1.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine INSTRUCTIONS
  LoopTerminator instructions
  Routine FIJACION_CENTRAL
  Routine DESCANSO
  Routine SACADAS
  Routine DESCANSO
  Routine SEGUIMIENTO
  Routine DESCANSO
  Routine LECTURA
