PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 2
  Units = height
  Window size (pixels) = [1440, 900]
  expName = magnocellular_stimuli
  eyetracker = MouseGaze
  keyboardBackend = ioHub
  mgBlink = ('MIDDLE_BUTTON',)
  mgMove = CONTINUOUS
  mgSaccade = 0.5
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Routines
  Routine Magnocelular_test
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    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        frecuencia_monitor = 60
        frecuencia_parpadeo = 30  # Hz, cambia este valor por la frecuencia deseada
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Begin Experiment:
        from psychopy.iohub import launchHubServer

        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]

        periphereal_region_diameter = 0.8
      Begin Routine:
        import math
        import random

        def calcular_posicion_stim(angulo_grados, diameter=1):
            radius = diameter / 2
            theta = math.radians(angulo_grados)
            stim_x = radius * math.cos(theta)
            stim_y = radius * math.sin(theta)

            return stim_x, stim_y

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = calcular_posicion_stim(posicion_angular,periphereal_region_diameter)
        stim.sf = frecuencia_espacial
        stim.orientation = orientacion
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')
        logs_parametros_trial.setText(
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Posicion Angular: {posicion_angular:.2f}\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Frecuencia Espacial: {frecuencia_espacial:.2f}\n"
            f"Frecuencia Temporal: {frecuencia_temporal:.3f}\n"
            f"Contraste: {contraste:.2f}\n"
            f"Color: {color_r},{color_g},{color_b}\n"
            f"Tamaño: {tamanyo:.2f}\n"
            f"FFT: {FFT:.2f}\n"
        )
        ####################################################
        #################____SETTINGS____###################
        ####################################################

        stim.setPhase(frecuencia_temporal,'+')
        #stim.setPhase(0.01,'+')
        stim.draw()

        #dots_no = noise_dots_no # prueba --> cargar variable del csv y volcar al estimulo

        ## FFT if activated

        if FFT != 0:
            frames_por_ciclo = int((frecuencia_monitor / FFT) / 2)
            opacidad = 1 if (frameN % (2 * frames_por_ciclo)) < frames_por_ciclo else 0
        else:
            opacidad = 1

        stim.opacity = opacidad

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs.setText("El ratón está dentro de la circunferencia")
            # Aquí puedes hacer que el estímulo grating sea visible si es necesario
              # o cualquier acción que quieras realizar
        else:
            logs.setText("El ratón está fuera de la circunferencia")
            # El ratón está fuera de la circunferencia
            # Aquí puedes hacer que el estímulo grating sea invisible si es necesario
            # o cualquier acción que quieras realizar

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        # START/STOP: Verifica si se ha presionado la tecla
        keys = event.getKeys()
        if 'space' in keys:
            pass
            #stim_x, stim_y = calcular_posicion_stim(periphereal_region_diameter)
    PolygonComponent periphereal_region
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = foveal_region_pos
      shape = circle
      size [set every repeat] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    PolygonComponent foveal_region
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = foveal_region_pos
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent logs
      letterHeight = 0.025
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial
      letterHeight = 0.025
      pos = (0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    SliderComponent slider
      disabled = True
      forceEndRoutine = False
      granularity = 0
      initVal = 0.1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    GratingComponent stim
      color [set every repeat] = color_r, color_g, color_b
      contrast [set every repeat] = contraste
      mask = gauss
      opacity = 0.7
      ori [set every repeat] = orientacion
      phase = 0.5
      pos [set every repeat] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    DotsComponent noise
      coherence = 1.0
      dir = 0.0
      dotLife = 10
      dotSize = 30
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = 2
      nDots = 300
      noiseDots = direction
      opacity [set every frame] = 1 - t / 10 if 0 <= t <= 10 else 0
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
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  Routine break_5s_
    RoutineSettingsComponent break_5s_
      disabled = True
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    TextComponent text_countdown
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text [set every frame] = $str(5-int(t))
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Parvocelular_test
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        frecuencia_monitor = 60
        frecuencia_parpadeo = 30  # Hz, cambia este valor por la frecuencia deseada
        frames_por_ciclo = int((frecuencia_monitor / frecuencia_parpadeo) / 2)
        opacidad = 1
      Begin Experiment:
        from psychopy.iohub import launchHubServer
        io = launchHubServer()
        mouse = io.devices.mouse

        posicion_estimulo = (0,0)
        stim_x = 0
        stim_y = 0

        foveal_region_pos = [0,0]
      Begin Routine:
        import math
        import random

        ####################################################
        ###############____PARAMS CONFIG____################
        ####################################################
        posicion_estimulo = stim_x, stim_y = 0,0
        stim_2.sf = frecuencia_espacial
        stim_2.orientation = orientacion
      Each Frame:
        ####################################################
        ##############____ON SCREEN LOGS____################
        ####################################################
        gaze_position = mouse.getPosition()
        logs_coordenadas_mirada_2.setText(f'{gaze_position[0]:.2f},{gaze_position[1]:.2f}')
        logs_parametros_trial_2.setText(
            f"Intento: {intento}\n"
            f"Orientación: {orientacion:.2f}\n"
            f"Posicion Angular: {posicion_angular:.2f}\n"
            f"Posicion Estimulo: ({posicion_estimulo[0]:.2f}, {posicion_estimulo[1]:.2f})\n"
            f"Frecuencia Espacial: {frecuencia_espacial:.2f}\n"
            f"Frecuencia Temporal: {frecuencia_temporal:.3f}\n"
            f"Contraste: {contraste:.2f}\n"
            f"Color: {color_r},{color_g},{color_b}\n"
            f"Tamaño: {tamanyo:.2f}"
            f"FFT: {FFT:.2f}"
        )

        ####################################################
        #################____SETTINGS____###################
        ####################################################

        stim_2.setPhase(frecuencia_temporal,'+')
        #stim_2.setPhase(0.01,'+')
        stim_2.draw()

        ## FFT if activated

        if FFT != 0:
            frames_por_ciclo = int((frecuencia_monitor / FFT) / 2)
            opacidad = 1 if (frameN % (2 * frames_por_ciclo)) < frames_por_ciclo else 0
        else:
            opacidad = 1

        stim_2.opacity = opacidad

        ####################################################
        ##########____GAZE VS REGION POSITION____###########
        ####################################################
        # Calcula la distancia del ratón al centro de foveal_region
        dist_from_center = ((gaze_position[0] - foveal_region_pos[0])**2 + (gaze_position[1] - foveal_region_pos[1])**2)**0.5

        # Comprueba si la distancia es menor que el radio de foveal_region
        if dist_from_center <= 0.25/2:#foveal_region.radius:
            logs_2.setText("El ratón está dentro de la circunferencia")
            # Aquí puedes hacer que el estímulo grating sea visible si es necesario
              # o cualquier acción que quieras realizar
        else:
            logs_2.setText("El ratón está fuera de la circunferencia")
            # El ratón está fuera de la circunferencia
            # Aquí puedes hacer que el estímulo grating sea invisible si es necesario
            # o cualquier acción que quieras realizar

        ####################################################
        ##############____EVENTS & STATES____###############
        ####################################################

        # START/STOP: Verifica si se ha presionado la tecla
        keys = event.getKeys()
        if 'space' in keys:
            pass
            #stim_x, stim_y = calcular_posicion_stim(periphereal_region_diameter)
    PolygonComponent foveal_region_2
      disabled = True
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = foveal_region_pos
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    TextComponent logs_2
      letterHeight = 0.025
      pos = (-0.45, 0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_coordenadas_mirada_2
      letterHeight = 0.025
      pos = (-0.45, -0.45)
      startVal [time (s)] = 0.0
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    TextComponent logs_parametros_trial_2
      letterHeight = 0.025
      pos = (0.45, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
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    SliderComponent slider_2
      disabled = True
      forceEndRoutine = False
      granularity = 0
      initVal = 0.1
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    PolygonComponent polygon_2
      disabled = True
      fillColor = white
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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    GratingComponent stim_2
      color [set every repeat] = color_r,color_g,color_b
      contrast [set every repeat] = contraste
      mask = gauss
      opacity = 0.7
      ori [set every repeat] = orientacion
      phase = 0.5
      pos [set every frame] = (stim_x, stim_y)
      saveStartStop = False
      sf = 1
      size [set every repeat] = tamanyo
      startVal [time (s)] = 0.0
      tex = sin
      texture resolution = 512
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    DotsComponent noise_2
      coherence = 1.0
      dir = 0.0
      dotLife = 10
      dotSize = 30
      fieldPos = (0.0, 0.0)
      fieldShape = square
      fieldSize = 2
      nDots = 300
      noiseDots = direction
      opacity [set every frame] = 1 - t / 10 if 0 <= t <= 10 else 0
      refreshDots = repeat
      saveStartStop = False
      signalDots = same
      speed = 0
      startVal [time (s)] = 0.0
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  Routine calibration_routine
    RoutineSettingsComponent calibration_routine
      disabled = True
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    SliderComponent slider_3
      forceEndRoutine = False
      granularity = 0
      initVal = 0.5
      labels = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
      letterHeight = 0.05
      pos = (0, -0.4)
      saveStartStop = False
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = rating
      ticks = (0.1, 0.2, 0.3, 0.4, 0.5, 0.6, 0.7, 0.8, 0.9, 1)
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Experiment:
        periphereal_region_diameter = 0.5
      Each Frame:
        #periphereal_region_diameter = 0.5

        if slider_3.getRating() is not None:
            periphereal_region_diameter = slider_3.getRating()

        log_calibration.setText(f"Foveal region diameter: {periphereal_region_diameter:.2f}")
    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.015
      pos = (0.45, 0.450)
      size = (0.15, 0.15)
      startVal [time (s)] = 0
      text = Click here when calibrated
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    PolygonComponent periphereal_region_2
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size [set every frame] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    TextComponent log_calibration
      letterHeight = 0.025
      pos = (0.35, 0.35)
      startVal [time (s)] = 0.0
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  Routine Configuration_results
    RoutineSettingsComponent Configuration_results
      disabled = True
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    PolygonComponent periphereal_region_result
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size [set every repeat] = periphereal_region_diameter
      startVal [time (s)] = 0.0
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    PolygonComponent foveal_region_result
      fillColor = 0.0000, 0.0000, 0.0000
      lineColor = -1.0000, -1.0000, -1.0000
      shape = circle
      size = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
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    ImageComponent logo_bio
      image = images/BIOBIZKAIA_horizontal_CMYK.png
      pos = (-0.45, 0.35)
      saveStartStop = False
      size = (0.4, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent logo_compneurolab
      image = images/compneuro_horizontal.png
      pos = (0.45, 0.35)
      saveStartStop = False
      size = (0.6, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_title
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = TEST DE EVALUACIÓN DE LOS SISTEMAS MAGNOCELULAR Y PARVOCELULAR
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    TextComponent text_instructions
      letterHeight = 0.035
      pos = (0, -0.20)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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    CodeComponent code_5
      Code Type = Auto->JS
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      Before Experiment:
        instruction_no = 0
        messages_instructions = ["Bienvenido/a al estudio sobre el rendimiento del sistema visual. En este experimento, observarás varios estímulos visuales presentados en diferentes zonas de la pantalla, que corresponden a la zona periférica o central de la retina.",
        "Se te mostrarán parches de Gabor, que varían en posición, color, fase, frecuencia espacial y temporal. Tu tarea es mantener la mirada fijada en el centro de la pantalla mientras observas los cambios en los estímulos periféricos sin mover los ojos.",
        "Cada cinco ensayos, tendrás un descanso de 5 segundos. Es importante mantener la atención durante los ensayos y descansar durante los intervalos para optimizar tu rendimiento.",
        "Comenzaremos con un ensayo de práctica antes de proceder con los ensayos que serán registrados.",
        "Presiona la barra espaciadora cuando estés listo/a para comenzar. Si tienes alguna pregunta o necesitas más información, no dudes en preguntar."]
      Begin Experiment:
        #text_instructions.alignHoriz='left'
        #text_instructions.wrapWidth=1.0
        instruction_no = 0
      Each Frame:
        text_instructions.text = messages_instructions[instruction_no]

        if instruction_no == (len(messages_instructions) - 1):
            button_next_instruction.opacity = 0
            #button_next_instruction.status = PAUSED
        else:
            button_next_instruction.opacity = 1.0
            #button_next_instruction.status = STARTED

        if instruction_no == 0:
            button_previous_instruction.opacity = 0
            #button_previous_instruction.status = PAUSED
        else:
            button_previous_instruction.opacity = 1.0
            #button_previous_instruction.status = STARTED

        ###################################################
        ####________________EVENTS_____________________####
        ###################################################

        keys = event.getKeys()  # Cada llamada al buffer lo vaciía (teoricamente)

        if 'space' in keys:
            continueRoutine = False
    ButtonComponent button_next_instruction
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (0.5, -0.4)
      saveStartStop = False
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = Siguiente -->
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      callback:
        if instruction_no < len(messages_instructions)-1:
            instruction_no+=1
    ButtonComponent button_previous_instruction
      bold = True
      borderWidth = 0.1
      fillColor = -1.0000, 0.0039, -1.0000
      forceEndRoutine = False
      letterHeight = 0.03
      pos = (-0.5, -0.4)
      size = (0.25, 0.15)
      startVal [time (s)] = 0
      text = <--Anterior
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      callback:
        if 0 < instruction_no:
            instruction_no-=1
    KeyboardComponent key_resp_skip_instructions
      allowedKeys = 'space'
      disabled = True
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  Routine calibration_routine
  Routine Configuration_results
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = 0:5
    conditionsFile = settings.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 1), ('orientacion', 45), ('posicion_angular', 0), ('frecuencia_espacial', 5), ('frecuencia_temporal', 0.1), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1), ('FFT', 10), ('noise_dots_no', 300), ('noise', 0.0)]),
      OrderedDict([('intento', 2), ('orientacion', 135), ('posicion_angular', 15), ('frecuencia_espacial', 10), ('frecuencia_temporal', 0.01), ('contraste', 0.5), ('tamanyo', 0.5), ('color_r', 1), ('color_g', 1), ('color_b', 1), ('FFT', 20), ('noise_dots_no', 100), ('noise', 0.0)]),
      OrderedDict([('intento', 3), ('orientacion', 45), ('posicion_angular', 30), ('frecuencia_espacial', 8), ('frecuencia_temporal', 0.05), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1), ('FFT', 30), ('noise_dots_no', 0), ('noise', 0.0)]),
      OrderedDict([('intento', 4), ('orientacion', 135), ('posicion_angular', 45), ('frecuencia_espacial', 15), ('frecuencia_temporal', 0.4), ('contraste', 0.5), ('tamanyo', 0.5), ('color_r', 1), ('color_g', 1), ('color_b', 1), ('FFT', 0), ('noise_dots_no', 50), ('noise', 0.0)]),
      OrderedDict([('intento', 5), ('orientacion', 45), ('posicion_angular', 60), ('frecuencia_espacial', 1), ('frecuencia_temporal', 0.0), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1), ('FFT', 10), ('noise_dots_no', 600), ('noise', 0.0)])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
    Routine Magnocelular_test
  LoopTerminator trials
  Routine break_5s_
  LoopInitiator trials_2 loopType="TrialHandler"
    Selected rows = 5:10
    conditionsFile = settings.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 1), ('orientacion', 45), ('posicion', 0), ('frecuencia_espacial', 5), ('frecuencia_temporal', 0.1), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1)]),
      OrderedDict([('intento', 2), ('orientacion', 135), ('posicion', 15), ('frecuencia_espacial', 10), ('frecuencia_temporal', 0.01), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1)]),
      OrderedDict([('intento', 3), ('orientacion', 45), ('posicion', 30), ('frecuencia_espacial', 8), ('frecuencia_temporal', 0.05), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1)]),
      OrderedDict([('intento', 4), ('orientacion', 135), ('posicion', 45), ('frecuencia_espacial', 15), ('frecuencia_temporal', 0.4), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1)]),
      OrderedDict([('intento', 5), ('orientacion', 45), ('posicion', 60), ('frecuencia_espacial', 1), ('frecuencia_temporal', 0.0), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1)]),
      OrderedDict([('intento', 6), ('orientacion', 45), ('posicion', 75), ('frecuencia_espacial', 15), ('frecuencia_temporal', 0.01), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1)])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
    Routine Parvocelular_test
  LoopTerminator trials_2
  Routine break_5s_
  LoopInitiator trials_3 loopType="TrialHandler"
    Selected rows = 10:15
    conditionsFile = settings.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 1), ('orientacion', 45), ('posicion_angular', 0), ('frecuencia_espacial', 5), ('frecuencia_temporal', 0.1), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1)]),
      OrderedDict([('intento', 2), ('orientacion', 135), ('posicion_angular', 15), ('frecuencia_espacial', 10), ('frecuencia_temporal', 0.01), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1)]),
      OrderedDict([('intento', 3), ('orientacion', 45), ('posicion_angular', 30), ('frecuencia_espacial', 8), ('frecuencia_temporal', 0.05), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1)]),
      OrderedDict([('intento', 4), ('orientacion', 135), ('posicion_angular', 45), ('frecuencia_espacial', 15), ('frecuencia_temporal', 0.4), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1)]),
      OrderedDict([('intento', 5), ('orientacion', 45), ('posicion_angular', 60), ('frecuencia_espacial', 1), ('frecuencia_temporal', 0.0), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1)]),
      OrderedDict([('intento', 6), ('orientacion', 45), ('posicion_angular', 75), ('frecuencia_espacial', 15), ('frecuencia_temporal', 0.01), ('contraste', 0.5), ('tamanyo', 0.25), ('color_r', 1), ('color_g', 1), ('color_b', 1)])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
    Routine Magnocelular_test
  LoopTerminator trials_3
