PsychoPy2experiment version="2023.2.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = test_percepcion_velocidad_aceleracion_y_trayectoria
  keyboardBackend = ioHub
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Routines
  Routine wait
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    PolygonComponent tunel_2
      fillColor = white
      pos [set every frame] = (0+distancia_estimulo_tunel, referencia_tierra)
      shape = rectangle
      size [set every frame] = (anchura_tunel/100, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = white
      pos [set every frame] = (-0.65, referencia_tierra+0.01)
      shape = circle
      size = (0.035, 0.035)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    PolygonComponent ground
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, referencia_tierra-(0.3/2))
      shape = rectangle
      size = (2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine start
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    PolygonComponent stim
      fillColor = white
      pos [set every frame] = (-0.65 + desplazamiento, referencia_tierra+0.01)
      saveStartStop = False
      shape = circle
      size = (0.035, 0.035)
      startVal [time (s)] = 0.0
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    PolygonComponent tunel
      fillColor = white
      pos [set every frame] = (0+distancia_estimulo_tunel, referencia_tierra)
      shape = rectangle
      size [set every frame] = (anchura_tunel/100, 0.5)
      startVal [time (s)] = 0.0
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    PolygonComponent ground_2
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, referencia_tierra-(0.3/2))
      shape = rectangle
      size = (2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code
      Code Type = Both
      Before Experiment:
        referencia_tierra = -0.2 # -0.2 para partir de la base de la pantalla. 0.2 parte superior de la pantalla.
        #anchura_tunel = 100 # % del area máxima del tunel
        stop = False
        #distancia_estimulo_tunel = 0.3 # depende del tamaño del tunel. Se añade esta distancia que desplaza el tunel a la derecha. Valor máximo recomendado aprox. 0.5
      Before JS Experiment:
        referencia_tierra = 0.2;
        area_box = 100;
        distancia_estimulo_tunel = 0.3;
      Begin Experiment:
        #velocidad = 1/10 # TODO: algoritmo cálculo de velocidad para cada iteración
        tunel.opacity = 1
      Begin JS Routine:
        desplazamiento = 0;
        velocidad = 0;
      Begin Routine:
        desplazamiento = 0
        stop = False
        tunel.opacity = 1
      Each Frame:
        if stop:
            pass
        else:
            desplazamiento = t*velocidad_2

        # Obtiene la posición en X de 'stim'
        stim_x = stim.pos[0]

        # Obtiene la posición en X del centro de 'box' y calcula la posición del borde derecho
        box_right_edge_x = tunel.pos[0] + tunel.size[0] / 2

        # Calcula la distancia al borde derecho de 'box'
        distance_to_right_edge = box_right_edge_x - stim_x

        # Actualiza el componente de texto con la distancia al borde derecho
        text.setText(f"Distancia: {distance_to_right_edge:.2f}\n Velocidad: {velocidad:.2f}\n Anchura tunel (%): {anchura_tunel:.2f}\n Distancia inicial: {distancia_estimulo_tunel:.2f}\n")

        tunel_right_edge_x = tunel.pos[0] + tunel.size[0] / 2

        # Hacer el estímulo invisible antes de salir por el túnel
        if stim_x > tunel_right_edge_x - 0.1 and not stop:
            stim.opacity = 0.0


        ####################################################
        ###################____EVENTS____###################
        ####################################################

        # Verifica si se ha presionado la tecla Enter (Intro)
        keys = event.getKeys()
        if 'return' in keys:
            stop = True
            #velocidad_2 = 0
            tunel.opacity = 0.3
            stim.opacity = 1.0
      Each JS Frame:
        velocidad = (1 / 10);
        desplazamiento = (t * velocidad);
        stim_x = stim.pos[0];
        box_right_edge_x = (box.pos[0] + (box.size[0] / 2));
        distance_to_right_edge = (box_right_edge_x - stim_x);
        text.setText(`Distancia: ${util.pad(Number.parseFloat(distance_to_right_edge).toFixed(2), 1)}
        Velocidad: ${util.pad(Number.parseFloat(velocidad).toFixed(2), 1)}`
        );
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine testt
    RoutineSettingsComponent testt
      disabled = True
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    TextComponent text_2
      letterHeight = 0.05
      pos = (0.5, 0.35)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent code_2
      Code Type = Py
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      Before Experiment:
        referencia_tierra = -0.2
      Each Frame:
        text_2.setText(f"Distancia: {distancia_estimulo_tunel:.2f}\n Velocidad: {velocidad:.2f}\n anchura_tunel: {anchura_tunel:.2f}\n Aceleracion: {aceleracion:.2f}\n ")
    PolygonComponent polygon_2
      fillColor = white
      shape = rectangle
      size [set every frame] = (0.8*anchura_tunel/100, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine tiro_parabolico
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    PolygonComponent tunel_3
      fillColor = white
      pos [set every frame] = (0, referencia_tierra)
      shape = rectangle
      size [set every frame] = (anchura_tunel/100, 0.8)
      startVal [time (s)] = 0.0
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    PolygonComponent ground_3
      fillColor = -1.0000, -1.0000, -1.0000
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (0, referencia_tierra-(0.3/2))
      shape = rectangle
      size = (2, 0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_4
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.035
      pos = (0.25, 0.25)
      startVal [time (s)] = 0.0
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    CodeComponent code_3
      Code Type = Both
      Before Experiment:
        import math

        referencia_tierra = -0.4 # -0.2 para partir de la base de la pantalla. 0.2 parte superior de la pantalla.
        #anchura_tunel = 100 # % del area máxima del tunel

        #distancia_estimulo_tunel = 0.3 # depende del tamaño del tunel. Se añade esta distancia que desplaza el tunel a la derecha. Valor máximo recomendado aprox. 0.5
        g = 4.9
      Before JS Experiment:
        referencia_tierra = 0.2;
        area_box = 100;
        distancia_estimulo_tunel = 0.3;
        4.9
      Begin Experiment:
        #velocidad = 1/10 # TODO: algoritmo cálculo de velocidad para cada iteración
        tunel_3.opacity = 0.5

        posicion_x = 0
        posicion_y = 0
      Begin JS Routine:
        desplazamiento = 0;
        velocidad = 0;
      Begin Routine:
        stop = False
        detener_bola = False
        desplazamiento = 0
        tunel_3.opacity = 0.5

        # Calcular las componentes de la velocidad
        theta_radians = math.radians(angulo)
        velocidad_x = velocidad * math.cos(theta_radians)
        velocidad_y = velocidad * math.sin(theta_radians)
      Each Frame:
        if stop:
            posicion_x = 0
            posicion_y = 0

        elif detener_bola:
            posicion_x = posicion_x
            posicion_y = posicion_y

        else: # Calcular posicion segun formula de tiro parabolico
            posicion_x = (t*velocidad_x) + posicion_x
            posicion_y = (t*velocidad_y) - (0.5*g*t*t) + posicion_y

        # Actualiza el componente de texto con la distancia al borde derecho
        text_4.setText(f"Angulo disparo: {angulo:.2f}\n Velocidad: {velocidad:.2f}\n Velocidad_x: {velocidad_x:.2f}\n Velocidad_y: {velocidad_y:.2f}\n posicion_x: {posicion_x:.2f}\n posicion_y: {posicion_y:.2f}\nStop: {stop:.2f}\n ")


        ####################################################
        ###################____EVENTS____###################
        ####################################################

        # Detiene el estimulo si toca tierra en la caida
        if posicion_y < 0:
            detener_bola = True

        # STOP: Verifica si se ha presionado la tecla Enter (Intro)
        keys = event.getKeys()
        if 'return' in keys:
            stop = True
            #velocidad_2 = 0
            tunel_3.opacity = 0.3
            stim_2.opacity = 1.0
      Each JS Frame:
        velocidad = (1 / 10);
        desplazamiento = (t * velocidad);
        stim_x = stim.pos[0];
        box_right_edge_x = (box.pos[0] + (box.size[0] / 2));
        distance_to_right_edge = (box_right_edge_x - stim_x);
        text.setText(`Distancia: ${util.pad(Number.parseFloat(distance_to_right_edge).toFixed(2), 1)}
        Velocidad: ${util.pad(Number.parseFloat(velocidad).toFixed(2), 1)}`
        );
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent stim_2
      fillColor = -0.6157, 0.5608, -0.6235
      pos [set every frame] = (-0.65 + posicion_x, referencia_tierra + 0.01 + posicion_y)
      saveStartStop = False
      shape = circle
      size = (0.035, 0.035)
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = specs.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('intento', 1), ('velocidad', 0.1), ('aceleracion', 0), ('anchura_tunel', 100), ('distancia_estimulo_tunel', 0.3), ('velocidad_2', 0.1)]),
      OrderedDict([('intento', 2), ('velocidad', 0.2), ('aceleracion', 0), ('anchura_tunel', 75), ('distancia_estimulo_tunel', 0.4), ('velocidad_2', 0.2)]),
      OrderedDict([('intento', 3), ('velocidad', 0.3), ('aceleracion', 0), ('anchura_tunel', 50), ('distancia_estimulo_tunel', 0.5), ('velocidad_2', 0.3)]),
      OrderedDict([('intento', 4), ('velocidad', 0.4), ('aceleracion', 0), ('anchura_tunel', 35), ('distancia_estimulo_tunel', 0.6), ('velocidad_2', 0.4)]),
      OrderedDict([('intento', 5), ('velocidad', 0.3), ('aceleracion', 0), ('anchura_tunel', 20), ('distancia_estimulo_tunel', 0.7), ('velocidad_2', 0.3)])]
    Routine wait
    Routine start
  LoopTerminator trials_2
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = specs_tiro_parabolico.csv
    loopType = sequential
    nReps = 4
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    conditions:
      [OrderedDict([('intento', 1), ('velocidad', 1), ('aceleracion', 0), ('angulo', 45), ('anchura_tunel', 50)]),
      OrderedDict([('intento', 2), ('velocidad', 2), ('aceleracion', 0), ('angulo', 45), ('anchura_tunel', 40)]),
      OrderedDict([('intento', 3), ('velocidad', 3), ('aceleracion', 0), ('angulo', 45), ('anchura_tunel', 30)]),
      OrderedDict([('intento', 4), ('velocidad', 4), ('aceleracion', 0), ('angulo', 45), ('anchura_tunel', 100)])]
    Routine tiro_parabolico
  LoopTerminator trials
